---
API: 2.1
OpenSesame: 3.3.10a12
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Replication: Kerwer et al.(2021)"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 16
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "D:\\core\\Research\\projects\\Meta_Replication\\Projects\\202102_PL\\1_OS_scripts"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background black

define loop ACC
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Access
	setcycle 0 Q_probe "你想要取得原始論文全文嗎？"
	run ACC_sequence

define sketchpad ACC_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="Y:想要" x=-160 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="N:不想要" x=128 y=128 z_index=0

define keyboard_response ACC_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define sequence ACC_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run ACC_board always
	run ACC_response always
	run Study_logger always

define form_text_display Access_show
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render yes
	set ok_text "記下網址請點此繼續"
	set margins "50;50;50;50"
	set form_title "全文取得網址"
	set form_text "[Link]"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_multiple_choice Access_survey
	set timeout infinite
	set spacing 10
	set question "你想要取得原始論文全文嗎？"
	__options__
	想
	不想
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Comprehensibility_survey
	set timeout infinite
	set spacing 10
	__question__
	How do you rate this summary? 
	Please indicate your assessment of the summary on the following scale.
	__end__
	__options__
	1:  完全無法理解內容
	2
	3
	4
	5
	6
	7 
	8: 完全能理解內容
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "文章適讀性評估"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Credibility_survey
	set timeout infinite
	set spacing 10
	__question__
	How do you rate this summary? 
	Please indicate your assessment of the summary on the following scale.
	__end__
	__options__
	1: 摘要完全不可信
	2
	3
	4
	5
	6
	7 
	8: 摘要完全可信
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Decision_survey
	set timeout infinite
	set spacing 10
	__question__
	How do you rate this summary? 
	Please indicate your assessment of the summary on the following scale.
	__end__
	__options__
	1: 完全無法做決定
	2
	3
	4
	5
	6
	7 
	8: 完全能自己做決定
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define loop EES
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 4
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Curious
	setcycle 0 Q_probe "請同時說明您在閱讀摘要時所經歷的感受。請為每一種情感指出您經歷的強烈程度。"
	setcycle 0 Q_options "1:  非常不好奇<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常好奇"
	setcycle 1 Q_type Bored
	setcycle 1 Q_probe "請同時說明您在閱讀摘要時所經歷的感受。請為每一種情感指出您經歷的強烈程度。"
	setcycle 1 Q_options "1:  非常無聊<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常有趣"
	setcycle 2 Q_type Confused
	setcycle 2 Q_probe "請同時說明您在閱讀摘要時所經歷的感受。請為每一種情感指出您經歷的強烈程度。"
	setcycle 2 Q_options "1:  非常困惑<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常了解"
	setcycle 3 Q_type Frustrated
	setcycle 3 Q_probe "請同時說明您在閱讀摘要時所經歷的感受。請為每一種情感指出您經歷的強烈程度。"
	setcycle 3 Q_options "1:  非常沮喪<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 非常開心"
	run EES_sequence

define sketchpad EES_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="[Q_options]" x=0 y=64 z_index=0

define keyboard_response EES_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define sequence EES_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run EES_board always
	run EES_response always
	run Study_logger always

define form_text_display End_of_Study_display
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "點我結束"
	set margins "50;50;50;50"
	set form_title "測驗結束"
	set form_text "感謝您的參與"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop JB
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "Psychologisches Wissen setzt sich zusammen aus persönlichen  Meinungen von Forscher/-innen, da es in der Psychologie keine Tatsachen gibt."
	setcycle 0 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 0 Q_type Belief
	setcycle 0 Topic PJ
	setcycle 0 JB_id 1
	setcycle 0 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	setcycle 1 Question " In der Psychologie geben Wissenschaftler/-innen lediglich ihre eigene Ansicht als wissenschaftliche Erkenntnis aus."
	setcycle 1 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 1 Q_type Belief
	setcycle 1 Topic PJ
	setcycle 1 JB_id 2
	setcycle 1 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	setcycle 2 Question "In der Psychologie entstehen wissenschaftliche Erkenntnisse  hauptsächlich aus den Ansichten des/-r jeweiligen Forschers/-in."
	setcycle 2 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 2 Q_type Belief
	setcycle 2 Topic PJ
	setcycle 2 JB_id 3
	setcycle 2 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	setcycle 3 Question "Wenn ein(e) Wissenschaftler/-in aus der Psychologie sagt, dass in der Psychologie etwas korrekt ist, dann glaube ich das."
	setcycle 3 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 3 Q_type Belief
	setcycle 3 Topic JA
	setcycle 3 JB_id 1
	setcycle 3 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	setcycle 4 Question "Wenn mir ein(e) Wissenschaftler/-in aus der Psychologie etwas über einen psychologischen Sachverhalt erzählt, dann glaube ich das."
	setcycle 4 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 4 Q_type Belief
	setcycle 4 Topic JA
	setcycle 4 JB_id 2
	setcycle 4 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	setcycle 5 Question "Wenn ich etwas lese, das auf psychologischer Forschung beruht,  dann weiß ich, dass es stimmt."
	setcycle 5 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 5 Q_type Belief
	setcycle 5 Topic JA
	setcycle 5 JB_id 3
	setcycle 5 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	setcycle 6 Question " Um in der Psychologie wissenschaftlichen Behauptungen trauen zu können, müssen verschiedene Quellen überprüft werden."
	setcycle 6 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 6 Q_type Belief
	setcycle 6 Topic MS
	setcycle 6 JB_id 1
	setcycle 6 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	setcycle 7 Question "Ich kann mir bei einer wissenschaftlichen Behauptung aus der Psychologie nie sicher sein, solange ich nicht wenigstens eine weitere Quelle überprüft habe."
	setcycle 7 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 7 Q_type Belief
	setcycle 7 Topic MS
	setcycle 7 JB_id 2
	setcycle 7 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	setcycle 8 Question "Eine Quelle allein ist in der Psychologie niemals genug um zu  entscheiden, was wissenschaftlich richtig ist."
	setcycle 8 Options "1:not true at all;2:largely untrue;3:not likely to be true;4:a little bit true;5:largely true;6:totally true"
	setcycle 8 Q_type Belief
	setcycle 8 Topic MS
	setcycle 8 JB_id 3
	setcycle 8 Title "[In the following you will find some statements about psychology as a science. Please indicate the extent to which you agree with the statements, from 'not true at all' to 'totally true'. Please keep in mind that all statements always refer to psychology as a science.]"
	run JB_seq

define sketchpad JB_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Question]" x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Options]" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="" x=-672 y=-256 z_index=0

define keyboard_response JB_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6"

define sequence JB_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run JB_survey always
	run JB_board never
	run JB_response never
	run Study_logger always

define form_multiple_choice JB_survey
	set timeout infinite
	set spacing 10
	__question__
	[Question]
	__end__
	__options__
	1:not true at all
	2:largely untrue
	3:not likely to be true
	4:a little bit true
	5:largely true
	6:totally true
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "[Title]"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define sketchpad Q_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=24 html=yes show_if=always text="[Q_probe]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=16 html=yes show_if=always text="[Q_options]" x=0 y=64 z_index=0

define keyboard_response Q_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define sequence Q_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Q_board never
	run Q_response never
	run Study_logger always

define loop Questions
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 5
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Q_type Comprehensibility
	setcycle 0 Q_probe "How do you rate this summary? <br/>Please indicate your assessment of the summary on the following scale."
	setcycle 0 Q_options "1:  完全無法理解內容 <br/>2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 完全能理解內容"
	setcycle 1 Q_type Scientificness
	setcycle 1 Q_probe "How do you rate this summary? <br/>Please indicate your assessment of the summary on the following scale."
	setcycle 1 Q_options "1:  完全沒有科學價值內容<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 完全有科學價值內容"
	setcycle 2 Q_type Credibility
	setcycle 2 Q_probe "How do you rate this summary? <br/>Please indicate your assessment of the summary on the following scale."
	setcycle 2 Q_options "1:  摘要完全沒有信用<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 摘要完全有信用"
	setcycle 3 Q_type Veracity
	setcycle 3 Q_probe "Based on this summary, I am able to evaluate the veracity of the corresponding study. Please indicate your agreement with the following statements."
	setcycle 3 Q_options "1:  完全沒有真實性<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 完全有真實性"
	setcycle 4 Q_type Decision
	setcycle 4 Q_probe "Based on this summary, I am able to make a decision without needing any further information (i.e., reading the full text or talking to an expert). Please indicate your agreement with the following statements."
	setcycle 4 Q_options "1:  完全無法做決定<br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: 完全能自己做決定"
	run Q_sequence

define form_multiple_choice Scientificness_survey
	set timeout infinite
	set spacing 10
	__question__
	How do you rate this summary? 
	Please indicate your assessment of the summary on the following scale.
	__end__
	__options__
	1: 完全沒有科學價值內容
	2
	3
	4
	5
	6
	7 
	8: 完全有科學價值內容
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define logger Study_logger
	set description "Logs experimental data"
	set auto_log no
	log response
	log Q_type
	log accept_status
	log checkbox_status
	log Content
	log OSA
	log NH
	log Text_test_Q
	log correct_response

define sketchpad Test_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Text_test_Q]" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="Y:是" x=-160 y=128 z_index=0
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="N:否" x=128 y=128 z_index=0

define keyboard_response Test_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define form_multiple_choice Test_survey
	set timeout infinite
	set spacing 10
	set question "[Text_test_Q]"
	__options__
	是
	否
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "請根據您剛才讀過的三篇文章回答以下問題"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define form_multiple_choice Veracity_survey
	set timeout infinite
	set spacing 10
	__question__
	How do you rate this summary? 
	Please indicate your assessment of the summary on the following scale.
	__end__
	__options__
	1: 完全沒有真實性
	2
	3
	4
	5
	6
	7 
	8: 完全有真實性
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define inline_html birth_year
	__html__
	請輸入出生西元年份的最後兩個數字：<br/>
	例如， 出生年是2001，請輸入<b>01</b><br/>
	<br/>
	填寫完畢點擊OK繼續
	<br/>
	<input type='text' name='text_response'>
	<input type='submit' value='ok'>
	__end__
	set description "Embeds custom HTML"

define loop block
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Text_test_Q Text01_Q1
	setcycle 0 correct_response y
	setcycle 0 Test_id 1
	setcycle 0 Q_type Knowledge
	setcycle 1 Text_test_Q Text01_Q2
	setcycle 1 correct_response y
	setcycle 1 Test_id 1
	setcycle 1 Q_type Knowledge
	setcycle 2 Text_test_Q Text02_Q1
	setcycle 2 correct_response n
	setcycle 2 Test_id 2
	setcycle 2 Q_type Knowledge
	setcycle 3 Text_test_Q Text02_Q2
	setcycle 3 correct_response y
	setcycle 3 Test_id 2
	setcycle 3 Q_type Knowledge
	setcycle 4 Text_test_Q Text03_Q1
	setcycle 4 correct_response n
	setcycle 4 Test_id 3
	setcycle 4 Q_type Knowledge
	setcycle 5 Text_test_Q Text03_Q2
	setcycle 5 correct_response y
	setcycle 5 Test_id 3
	setcycle 5 Q_type Knowledge
	setcycle 6 Text_test_Q Text04_Q1
	setcycle 6 correct_response y
	setcycle 6 Test_id 4
	setcycle 6 Q_type Knowledge
	setcycle 7 Text_test_Q Text04_Q2
	setcycle 7 correct_response y
	setcycle 7 Test_id 4
	setcycle 7 Q_type Knowledge
	setcycle 8 Text_test_Q Text05_Q1
	setcycle 8 correct_response n
	setcycle 8 Test_id 5
	setcycle 8 Q_type Knowledge
	setcycle 9 Text_test_Q Text05_Q2
	setcycle 9 correct_response y
	setcycle 9 Test_id 5
	setcycle 9 Q_type Knowledge
	setcycle 10 Text_test_Q Text06_Q1
	setcycle 10 correct_response n
	setcycle 10 Test_id 6
	setcycle 10 Q_type Knowledge
	setcycle 11 Text_test_Q Text06_Q2
	setcycle 11 correct_response y
	setcycle 11 Test_id 6
	setcycle 11 Q_type Knowledge
	setcycle 12 Text_test_Q Text07_Q1
	setcycle 12 correct_response y
	setcycle 12 Test_id 7
	setcycle 12 Q_type Knowledge
	setcycle 13 Text_test_Q Text07_Q2
	setcycle 13 correct_response y
	setcycle 13 Test_id 7
	setcycle 13 Q_type Knowledge
	setcycle 14 Text_test_Q Text08_Q1
	setcycle 14 correct_response n
	setcycle 14 Test_id 8
	setcycle 14 Q_type Knowledge
	setcycle 15 Text_test_Q Text08_Q2
	setcycle 15 correct_response y
	setcycle 15 Test_id 8
	setcycle 15 Q_type Knowledge
	setcycle 16 Text_test_Q Text09_Q1
	setcycle 16 correct_response n
	setcycle 16 Test_id 9
	setcycle 16 Q_type Knowledge
	setcycle 17 Text_test_Q Text09_Q2
	setcycle 17 correct_response y
	setcycle 17 Test_id 9
	setcycle 17 Q_type Knowledge
	setcycle 18 Text_test_Q Text10_Q1
	setcycle 18 correct_response y
	setcycle 18 Test_id 10
	setcycle 18 Q_type Knowledge
	setcycle 19 Text_test_Q Text10_Q2
	setcycle 19 correct_response y
	setcycle 19 Test_id 10
	setcycle 19 Q_type Knowledge
	setcycle 20 Text_test_Q Text11_Q1
	setcycle 20 correct_response n
	setcycle 20 Test_id 11
	setcycle 20 Q_type Knowledge
	setcycle 21 Text_test_Q Text11_Q2
	setcycle 21 correct_response y
	setcycle 21 Test_id 11
	setcycle 21 Q_type Knowledge
	setcycle 22 Text_test_Q Text12_Q1
	setcycle 22 correct_response n
	setcycle 22 Test_id 12
	setcycle 22 Q_type Knowledge
	setcycle 23 Text_test_Q Text12_Q2
	setcycle 23 correct_response y
	setcycle 23 Test_id 12
	setcycle 23 Q_type Knowledge
	run block_test

define sequence block_test
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Test_survey "([Test_id]=[Qid01]) or ([Test_id]=[Qid02]) or ([Test_id]=[Qid03])"
	run Test_board never
	run Test_response never
	run Study_logger always

define loop covariates
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Question "您的日常生活涉入科學研究的程度？ 請選擇以下最適合個人狀況的等級。"
	setcycle 0 Options "1: very little <br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: very much"
	setcycle 0 Q_type self_eval
	setcycle 0 Topic familiarity
	setcycle 1 Question "您如何評估自己判斷科學研究真實性的能力？ 請選擇以下最適合個人狀況的等級。"
	setcycle 1 Options "1: very little <br/> 2 <br/> 3 <br/> 4 <br/> 5 <br/> 6 <br/> 7 <br/> 8: very much"
	setcycle 1 Q_type self_eval
	setcycle 1 Topic ability
	run covariates_seq

define sketchpad covariates_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Question]" x=0 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="[Options]" x=0 y=32 z_index=0
	draw textline center=1 color=black font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=18 html=yes show_if=always text="" x=-672 y=-256 z_index=0

define keyboard_response covariates_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "1;2;3;4;5;6;7;8"

define sequence covariates_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run covariates_survey always
	run covariates_board never
	run covariates_response never
	run Study_logger always

define form_multiple_choice covariates_survey
	set timeout infinite
	set spacing 10
	set question "[Question]"
	__options__
	1:只有一點點
	2
	3
	4
	5
	6
	7
	8:非常高/非常好
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "先備知識調查"
	set description "A simple multiple choice item"
	set button_text "選好即刻進入下一題"
	set allow_multiple no
	set advance_immediately yes
	set _theme plain

define sequence experiment
	set flush_keyboard yes
	set description "主程序"
	run form_consent always
	run welcome always
	run main always

define form_consent form_consent
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "知情同意說明"
	__form_text__
	You are about to participate in an experiment.
	
	This experiment poses no known risks to your health and your name will not be associated with the findings.
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	If you have any questions not addressed by this consent form, please do not hesitate to ask.
	
	You can stop at any time during experiment if you feel uncomfortable.
	__end__
	set description "A simple consent form"
	set decline_text "不想參加"
	set decline_message "請先確認您已經閱讀完畢"
	set cols "2;2"
	set checkbox_text "我已經完全理解以上說明"
	set accept_text "確定參加！"
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define form_multiple_choice gender
	set timeout infinite
	set spacing 10
	set question "請問您的性別？"
	__options__
	女性
	男性
	跨性別
	非二元性別
	不想回答
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "基本資訊調查"
	set description "A simple multiple choice item"
	set button_text "確定回答"
	set allow_multiple no
	set advance_immediately no
	set _theme gray

define inline_javascript id_recording
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// Save the original text id to access the Questions in an end of block
	if((vars.count_text_seq%3)===0) {
	  vars.Qid01 = vars.O_id
	} else if((vars.count_text_seq%3)===1) {
	  vars.Qid02 = vars.O_id
	} else {
	  vars.Qid03 = vars.O_id
	}
	__end__
	set _prepare ""

define sequence main
	set flush_keyboard yes
	set description "分支程序"
	run gender always
	run birth_year always
	run JB always
	run covariates always
	run shuffle_block always
	run text_CB1 "[CB]=1"
	run text_CB2 "[CB]=2"
	run text_CB3 "[CB]=3"
	run End_of_Study_display always

define inline_javascript shuffle_block
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// getRndInteger(min, max) returns a random number between min and max (both included):
	function getRndInteger(min, max) {
	  return Math.floor(Math.random() * (max - min + 1) ) + min;
	}
	
	vars.CB = getRndInteger(1,3);
	__end__
	set _prepare ""

define loop text_CB1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 1
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 2
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 2 Content "01_OLS.txt"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 3
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 3 Content "02_PLS.txt"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 1
	setcycle 3 O_id 2
	setcycle 3 Link "https://www.doi.org/"
	setcycle 4 Content "02_PLS.txt"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 3
	setcycle 4 O_id 2
	setcycle 4 Link "https://www.doi.org/"
	setcycle 5 Content "02_OLS.txt"
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 2
	setcycle 5 O_id 2
	setcycle 5 Link "https://www.doi.org/"
	setcycle 6 Content "03_PLS.txt"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 2
	setcycle 6 O_id 3
	setcycle 6 Link "https://www.doi.org/"
	setcycle 7 Content "03_PLS.txt"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 1
	setcycle 7 O_id 3
	setcycle 7 Link "https://www.doi.org/"
	setcycle 8 Content "03_OLS.txt"
	setcycle 8 NH N
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 3
	setcycle 8 O_id 3
	setcycle 8 Link "https://www.doi.org/"
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 2
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 3
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 11 Content "04_OLS.txt"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 1
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 12 Content "05_PLS.txt"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 3
	setcycle 12 O_id 5
	setcycle 12 Link "https://www.doi.org/"
	setcycle 13 Content "05_PLS.txt"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 1
	setcycle 13 O_id 5
	setcycle 13 Link "https://www.doi.org/"
	setcycle 14 Content "05_OLS.txt"
	setcycle 14 NH N
	setcycle 14 OSA Y
	setcycle 14 Text_id 5
	setcycle 14 BLOCK 2
	setcycle 14 O_id 5
	setcycle 14 Link "https://www.doi.org/"
	setcycle 15 Content "06_PLS.txt"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 3
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/"
	setcycle 16 Content "06_PLS.txt"
	setcycle 16 NH N
	setcycle 16 OSA N
	setcycle 16 Text_id 6
	setcycle 16 BLOCK 2
	setcycle 16 O_id 6
	setcycle 16 Link "https://www.doi.org/"
	setcycle 17 Content "06_OLS.txt"
	setcycle 17 NH N
	setcycle 17 OSA Y
	setcycle 17 Text_id 6
	setcycle 17 BLOCK 1
	setcycle 17 O_id 6
	setcycle 17 Link "https://www.doi.org/"
	setcycle 18 Content "07_PLS.txt"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 1
	setcycle 18 O_id 7
	setcycle 18 Link "https://www.doi.org/"
	setcycle 19 Content "07_PLS.txt"
	setcycle 19 NH N
	setcycle 19 OSA N
	setcycle 19 Text_id 7
	setcycle 19 BLOCK 2
	setcycle 19 O_id 7
	setcycle 19 Link "https://www.doi.org/"
	setcycle 20 Content "07_OLS.txt"
	setcycle 20 NH N
	setcycle 20 OSA Y
	setcycle 20 Text_id 7
	setcycle 20 BLOCK 3
	setcycle 20 O_id 7
	setcycle 20 Link "https://www.doi.org/"
	setcycle 21 Content "08_PLS.txt"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 1
	setcycle 21 O_id 8
	setcycle 21 Link "https://www.doi.org/"
	setcycle 22 Content "08_PLS.txt"
	setcycle 22 NH N
	setcycle 22 OSA N
	setcycle 22 Text_id 8
	setcycle 22 BLOCK 3
	setcycle 22 O_id 8
	setcycle 22 Link "https://www.doi.org/"
	setcycle 23 Content "08_OLS.txt"
	setcycle 23 NH N
	setcycle 23 OSA Y
	setcycle 23 Text_id 8
	setcycle 23 BLOCK 2
	setcycle 23 O_id 8
	setcycle 23 Link "https://www.doi.org/"
	setcycle 24 Content "09_PLS.txt"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 2
	setcycle 24 O_id 9
	setcycle 24 Link "https://www.doi.org/"
	setcycle 25 Content "09_PLS.txt"
	setcycle 25 NH N
	setcycle 25 OSA N
	setcycle 25 Text_id 9
	setcycle 25 BLOCK 1
	setcycle 25 O_id 9
	setcycle 25 Link "https://www.doi.org/"
	setcycle 26 Content "09_OLS.txt"
	setcycle 26 NH N
	setcycle 26 OSA Y
	setcycle 26 Text_id 9
	setcycle 26 BLOCK 3
	setcycle 26 O_id 9
	setcycle 26 Link "https://www.doi.org/"
	setcycle 27 Content "10_PLS.txt"
	setcycle 27 NH Y
	setcycle 27 OSA N
	setcycle 27 Text_id 10
	setcycle 27 BLOCK 2
	setcycle 27 O_id 10
	setcycle 27 Link "https://www.doi.org/"
	setcycle 28 Content "10_PLS.txt"
	setcycle 28 NH N
	setcycle 28 OSA N
	setcycle 28 Text_id 10
	setcycle 28 BLOCK 3
	setcycle 28 O_id 10
	setcycle 28 Link "https://www.doi.org/"
	setcycle 29 Content "10_OLS.txt"
	setcycle 29 NH N
	setcycle 29 OSA Y
	setcycle 29 Text_id 10
	setcycle 29 BLOCK 1
	setcycle 29 O_id 10
	setcycle 29 Link "https://www.doi.org/"
	setcycle 30 Content "11_PLS.txt"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 3
	setcycle 30 O_id 11
	setcycle 30 Link "https://www.doi.org/"
	setcycle 31 Content "11_PLS.txt"
	setcycle 31 NH N
	setcycle 31 OSA N
	setcycle 31 Text_id 11
	setcycle 31 BLOCK 1
	setcycle 31 O_id 11
	setcycle 31 Link "https://www.doi.org/"
	setcycle 32 Content "11_OLS.txt"
	setcycle 32 NH N
	setcycle 32 OSA Y
	setcycle 32 Text_id 11
	setcycle 32 BLOCK 2
	setcycle 32 O_id 11
	setcycle 32 Link "https://www.doi.org/"
	setcycle 33 Content "12_PLS.txt"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 3
	setcycle 33 O_id 12
	setcycle 33 Link "https://www.doi.org/"
	setcycle 34 Content "12_PLS.txt"
	setcycle 34 NH N
	setcycle 34 OSA N
	setcycle 34 Text_id 12
	setcycle 34 BLOCK 2
	setcycle 34 O_id 12
	setcycle 34 Link "https://www.doi.org/"
	setcycle 35 Content "12_OLS.txt"
	setcycle 35 NH N
	setcycle 35 OSA Y
	setcycle 35 Text_id 12
	setcycle 35 BLOCK 1
	setcycle 35 O_id 12
	setcycle 35 Link "https://www.doi.org/"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 2
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 3
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 2 Content "01_OLS.txt"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 1
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 3 Content "02_PLS.txt"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 2
	setcycle 3 O_id 2
	setcycle 3 Link "https://www.doi.org/"
	setcycle 4 Content "02_PLS.txt"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 1
	setcycle 4 O_id 2
	setcycle 4 Link "https://www.doi.org/"
	setcycle 5 Content "02_OLS.txt"
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 3
	setcycle 5 O_id 2
	setcycle 5 Link "https://www.doi.org/"
	setcycle 6 Content "03_PLS.txt"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 3
	setcycle 6 O_id 3
	setcycle 6 Link "https://www.doi.org/"
	setcycle 7 Content "03_PLS.txt"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 2
	setcycle 7 O_id 3
	setcycle 7 Link "https://www.doi.org/"
	setcycle 8 Content "03_OLS.txt"
	setcycle 8 NH N
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 1
	setcycle 8 O_id 3
	setcycle 8 Link "https://www.doi.org/"
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 3
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 1
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 11 Content "04_OLS.txt"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 2
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 12 Content "05_PLS.txt"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 1
	setcycle 12 O_id 5
	setcycle 12 Link "https://www.doi.org/"
	setcycle 13 Content "05_PLS.txt"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 2
	setcycle 13 O_id 5
	setcycle 13 Link "https://www.doi.org/"
	setcycle 14 Content "05_OLS.txt"
	setcycle 14 NH N
	setcycle 14 OSA Y
	setcycle 14 Text_id 5
	setcycle 14 BLOCK 3
	setcycle 14 O_id 5
	setcycle 14 Link "https://www.doi.org/"
	setcycle 15 Content "06_PLS.txt"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 1
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/"
	setcycle 16 Content "06_PLS.txt"
	setcycle 16 NH N
	setcycle 16 OSA N
	setcycle 16 Text_id 6
	setcycle 16 BLOCK 3
	setcycle 16 O_id 6
	setcycle 16 Link "https://www.doi.org/"
	setcycle 17 Content "06_OLS.txt"
	setcycle 17 NH N
	setcycle 17 OSA Y
	setcycle 17 Text_id 6
	setcycle 17 BLOCK 2
	setcycle 17 O_id 6
	setcycle 17 Link "https://www.doi.org/"
	setcycle 18 Content "07_PLS.txt"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 2
	setcycle 18 O_id 7
	setcycle 18 Link "https://www.doi.org/"
	setcycle 19 Content "07_PLS.txt"
	setcycle 19 NH N
	setcycle 19 OSA N
	setcycle 19 Text_id 7
	setcycle 19 BLOCK 3
	setcycle 19 O_id 7
	setcycle 19 Link "https://www.doi.org/"
	setcycle 20 Content "07_OLS.txt"
	setcycle 20 NH N
	setcycle 20 OSA Y
	setcycle 20 Text_id 7
	setcycle 20 BLOCK 1
	setcycle 20 O_id 7
	setcycle 20 Link "https://www.doi.org/"
	setcycle 21 Content "08_PLS.txt"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 2
	setcycle 21 O_id 8
	setcycle 21 Link "https://www.doi.org/"
	setcycle 22 Content "08_PLS.txt"
	setcycle 22 NH N
	setcycle 22 OSA N
	setcycle 22 Text_id 8
	setcycle 22 BLOCK 1
	setcycle 22 O_id 8
	setcycle 22 Link "https://www.doi.org/"
	setcycle 23 Content "08_OLS.txt"
	setcycle 23 NH N
	setcycle 23 OSA Y
	setcycle 23 Text_id 8
	setcycle 23 BLOCK 3
	setcycle 23 O_id 8
	setcycle 23 Link "https://www.doi.org/"
	setcycle 24 Content "09_PLS.txt"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 3
	setcycle 24 O_id 9
	setcycle 24 Link "https://www.doi.org/"
	setcycle 25 Content "09_PLS.txt"
	setcycle 25 NH N
	setcycle 25 OSA N
	setcycle 25 Text_id 9
	setcycle 25 BLOCK 2
	setcycle 25 O_id 9
	setcycle 25 Link "https://www.doi.org/"
	setcycle 26 Content "09_OLS.txt"
	setcycle 26 NH N
	setcycle 26 OSA Y
	setcycle 26 Text_id 9
	setcycle 26 BLOCK 1
	setcycle 26 O_id 9
	setcycle 26 Link "https://www.doi.org/"
	setcycle 27 Content "10_PLS.txt"
	setcycle 27 NH Y
	setcycle 27 OSA N
	setcycle 27 Text_id 10
	setcycle 27 BLOCK 3
	setcycle 27 O_id 10
	setcycle 27 Link "https://www.doi.org/"
	setcycle 28 Content "10_PLS.txt"
	setcycle 28 NH N
	setcycle 28 OSA N
	setcycle 28 Text_id 10
	setcycle 28 BLOCK 1
	setcycle 28 O_id 10
	setcycle 28 Link "https://www.doi.org/"
	setcycle 29 Content "10_OLS.txt"
	setcycle 29 NH N
	setcycle 29 OSA Y
	setcycle 29 Text_id 10
	setcycle 29 BLOCK 2
	setcycle 29 O_id 10
	setcycle 29 Link "https://www.doi.org/"
	setcycle 30 Content "11_PLS.txt"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 1
	setcycle 30 O_id 11
	setcycle 30 Link "https://www.doi.org/"
	setcycle 31 Content "11_PLS.txt"
	setcycle 31 NH N
	setcycle 31 OSA N
	setcycle 31 Text_id 11
	setcycle 31 BLOCK 2
	setcycle 31 O_id 11
	setcycle 31 Link "https://www.doi.org/"
	setcycle 32 Content "11_OLS.txt"
	setcycle 32 NH N
	setcycle 32 OSA Y
	setcycle 32 Text_id 11
	setcycle 32 BLOCK 3
	setcycle 32 O_id 11
	setcycle 32 Link "https://www.doi.org/"
	setcycle 33 Content "12_PLS.txt"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 1
	setcycle 33 O_id 12
	setcycle 33 Link "https://www.doi.org/"
	setcycle 34 Content "12_PLS.txt"
	setcycle 34 NH N
	setcycle 34 OSA N
	setcycle 34 Text_id 12
	setcycle 34 BLOCK 3
	setcycle 34 O_id 12
	setcycle 34 Link "https://www.doi.org/"
	setcycle 35 Content "12_OLS.txt"
	setcycle 35 NH N
	setcycle 35 OSA Y
	setcycle 35 Text_id 12
	setcycle 35 BLOCK 2
	setcycle 35 O_id 12
	setcycle 35 Link "https://www.doi.org/"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define loop text_CB3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 36
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Content "01_PLS.txt"
	setcycle 0 NH Y
	setcycle 0 OSA N
	setcycle 0 Text_id 1
	setcycle 0 BLOCK 3
	setcycle 0 O_id 1
	setcycle 0 Link "https://www.doi.org/"
	setcycle 1 Content "01_PLS.txt"
	setcycle 1 NH N
	setcycle 1 OSA N
	setcycle 1 Text_id 1
	setcycle 1 BLOCK 1
	setcycle 1 O_id 1
	setcycle 1 Link "https://www.doi.org/"
	setcycle 2 Content "01_OLS.txt"
	setcycle 2 NH N
	setcycle 2 OSA Y
	setcycle 2 Text_id 1
	setcycle 2 BLOCK 2
	setcycle 2 O_id 1
	setcycle 2 Link "https://www.doi.org/"
	setcycle 3 Content "02_PLS.txt"
	setcycle 3 NH Y
	setcycle 3 OSA N
	setcycle 3 Text_id 2
	setcycle 3 BLOCK 3
	setcycle 3 O_id 2
	setcycle 3 Link "https://www.doi.org/"
	setcycle 4 Content "02_PLS.txt"
	setcycle 4 NH N
	setcycle 4 OSA N
	setcycle 4 Text_id 2
	setcycle 4 BLOCK 2
	setcycle 4 O_id 2
	setcycle 4 Link "https://www.doi.org/"
	setcycle 5 Content "02_OLS.txt"
	setcycle 5 NH N
	setcycle 5 OSA Y
	setcycle 5 Text_id 2
	setcycle 5 BLOCK 1
	setcycle 5 O_id 2
	setcycle 5 Link "https://www.doi.org/"
	setcycle 6 Content "03_PLS.txt"
	setcycle 6 NH Y
	setcycle 6 OSA N
	setcycle 6 Text_id 3
	setcycle 6 BLOCK 1
	setcycle 6 O_id 3
	setcycle 6 Link "https://www.doi.org/"
	setcycle 7 Content "03_PLS.txt"
	setcycle 7 NH N
	setcycle 7 OSA N
	setcycle 7 Text_id 3
	setcycle 7 BLOCK 3
	setcycle 7 O_id 3
	setcycle 7 Link "https://www.doi.org/"
	setcycle 8 Content "03_OLS.txt"
	setcycle 8 NH N
	setcycle 8 OSA Y
	setcycle 8 Text_id 3
	setcycle 8 BLOCK 2
	setcycle 8 O_id 3
	setcycle 8 Link "https://www.doi.org/"
	setcycle 9 Content "04_PLS.txt"
	setcycle 9 NH Y
	setcycle 9 OSA N
	setcycle 9 Text_id 4
	setcycle 9 BLOCK 1
	setcycle 9 O_id 4
	setcycle 9 Link "https://www.doi.org/"
	setcycle 10 Content "04_PLS.txt"
	setcycle 10 NH N
	setcycle 10 OSA N
	setcycle 10 Text_id 4
	setcycle 10 BLOCK 2
	setcycle 10 O_id 4
	setcycle 10 Link "https://www.doi.org/"
	setcycle 11 Content "04_OLS.txt"
	setcycle 11 NH N
	setcycle 11 OSA Y
	setcycle 11 Text_id 4
	setcycle 11 BLOCK 3
	setcycle 11 O_id 4
	setcycle 11 Link "https://www.doi.org/"
	setcycle 12 Content "05_PLS.txt"
	setcycle 12 NH Y
	setcycle 12 OSA N
	setcycle 12 Text_id 5
	setcycle 12 BLOCK 2
	setcycle 12 O_id 5
	setcycle 12 Link "https://www.doi.org/"
	setcycle 13 Content "05_PLS.txt"
	setcycle 13 NH N
	setcycle 13 OSA N
	setcycle 13 Text_id 5
	setcycle 13 BLOCK 3
	setcycle 13 O_id 5
	setcycle 13 Link "https://www.doi.org/"
	setcycle 14 Content "05_OLS.txt"
	setcycle 14 NH N
	setcycle 14 OSA Y
	setcycle 14 Text_id 5
	setcycle 14 BLOCK 1
	setcycle 14 O_id 5
	setcycle 14 Link "https://www.doi.org/"
	setcycle 15 Content "06_PLS.txt"
	setcycle 15 NH Y
	setcycle 15 OSA N
	setcycle 15 Text_id 6
	setcycle 15 BLOCK 2
	setcycle 15 O_id 6
	setcycle 15 Link "https://www.doi.org/"
	setcycle 16 Content "06_PLS.txt"
	setcycle 16 NH N
	setcycle 16 OSA N
	setcycle 16 Text_id 6
	setcycle 16 BLOCK 1
	setcycle 16 O_id 6
	setcycle 16 Link "https://www.doi.org/"
	setcycle 17 Content "06_OLS.txt"
	setcycle 17 NH N
	setcycle 17 OSA Y
	setcycle 17 Text_id 6
	setcycle 17 BLOCK 3
	setcycle 17 O_id 6
	setcycle 17 Link "https://www.doi.org/"
	setcycle 18 Content "07_PLS.txt"
	setcycle 18 NH Y
	setcycle 18 OSA N
	setcycle 18 Text_id 7
	setcycle 18 BLOCK 3
	setcycle 18 O_id 7
	setcycle 18 Link "https://www.doi.org/"
	setcycle 19 Content "07_PLS.txt"
	setcycle 19 NH N
	setcycle 19 OSA N
	setcycle 19 Text_id 7
	setcycle 19 BLOCK 1
	setcycle 19 O_id 7
	setcycle 19 Link "https://www.doi.org/"
	setcycle 20 Content "07_OLS.txt"
	setcycle 20 NH N
	setcycle 20 OSA Y
	setcycle 20 Text_id 7
	setcycle 20 BLOCK 2
	setcycle 20 O_id 7
	setcycle 20 Link "https://www.doi.org/"
	setcycle 21 Content "08_PLS.txt"
	setcycle 21 NH Y
	setcycle 21 OSA N
	setcycle 21 Text_id 8
	setcycle 21 BLOCK 3
	setcycle 21 O_id 8
	setcycle 21 Link "https://www.doi.org/"
	setcycle 22 Content "08_PLS.txt"
	setcycle 22 NH N
	setcycle 22 OSA N
	setcycle 22 Text_id 8
	setcycle 22 BLOCK 2
	setcycle 22 O_id 8
	setcycle 22 Link "https://www.doi.org/"
	setcycle 23 Content "08_OLS.txt"
	setcycle 23 NH N
	setcycle 23 OSA Y
	setcycle 23 Text_id 8
	setcycle 23 BLOCK 1
	setcycle 23 O_id 8
	setcycle 23 Link "https://www.doi.org/"
	setcycle 24 Content "09_PLS.txt"
	setcycle 24 NH Y
	setcycle 24 OSA N
	setcycle 24 Text_id 9
	setcycle 24 BLOCK 1
	setcycle 24 O_id 9
	setcycle 24 Link "https://www.doi.org/"
	setcycle 25 Content "09_PLS.txt"
	setcycle 25 NH N
	setcycle 25 OSA N
	setcycle 25 Text_id 9
	setcycle 25 BLOCK 3
	setcycle 25 O_id 9
	setcycle 25 Link "https://www.doi.org/"
	setcycle 26 Content "09_OLS.txt"
	setcycle 26 NH N
	setcycle 26 OSA Y
	setcycle 26 Text_id 9
	setcycle 26 BLOCK 2
	setcycle 26 O_id 9
	setcycle 26 Link "https://www.doi.org/"
	setcycle 27 Content "10_PLS.txt"
	setcycle 27 NH Y
	setcycle 27 OSA N
	setcycle 27 Text_id 10
	setcycle 27 BLOCK 1
	setcycle 27 O_id 10
	setcycle 27 Link "https://www.doi.org/"
	setcycle 28 Content "10_PLS.txt"
	setcycle 28 NH N
	setcycle 28 OSA N
	setcycle 28 Text_id 10
	setcycle 28 BLOCK 2
	setcycle 28 O_id 10
	setcycle 28 Link "https://www.doi.org/"
	setcycle 29 Content "10_OLS.txt"
	setcycle 29 NH N
	setcycle 29 OSA Y
	setcycle 29 Text_id 10
	setcycle 29 BLOCK 3
	setcycle 29 O_id 10
	setcycle 29 Link "https://www.doi.org/"
	setcycle 30 Content "11_PLS.txt"
	setcycle 30 NH Y
	setcycle 30 OSA N
	setcycle 30 Text_id 11
	setcycle 30 BLOCK 2
	setcycle 30 O_id 11
	setcycle 30 Link "https://www.doi.org/"
	setcycle 31 Content "11_PLS.txt"
	setcycle 31 NH N
	setcycle 31 OSA N
	setcycle 31 Text_id 11
	setcycle 31 BLOCK 3
	setcycle 31 O_id 11
	setcycle 31 Link "https://www.doi.org/"
	setcycle 32 Content "11_OLS.txt"
	setcycle 32 NH N
	setcycle 32 OSA Y
	setcycle 32 Text_id 11
	setcycle 32 BLOCK 1
	setcycle 32 O_id 11
	setcycle 32 Link "https://www.doi.org/"
	setcycle 33 Content "12_PLS.txt"
	setcycle 33 NH Y
	setcycle 33 OSA N
	setcycle 33 Text_id 12
	setcycle 33 BLOCK 2
	setcycle 33 O_id 12
	setcycle 33 Link "https://www.doi.org/"
	setcycle 34 Content "12_PLS.txt"
	setcycle 34 NH N
	setcycle 34 OSA N
	setcycle 34 Text_id 12
	setcycle 34 BLOCK 1
	setcycle 34 O_id 12
	setcycle 34 Link "https://www.doi.org/"
	setcycle 35 Content "12_OLS.txt"
	setcycle 35 NH N
	setcycle 35 OSA Y
	setcycle 35 Text_id 12
	setcycle 35 BLOCK 3
	setcycle 35 O_id 12
	setcycle 35 Link "https://www.doi.org/"
	sortby BLOCK
	slice 0 12
	shuffle Text_id
	run text_seq

define sketchpad text_display
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=yes font_family="chinese-japanese-korean" font_italic=no font_size=36 html=yes show_if=always text="[Content]" x=0 y=-96 z_index=0

define keyboard_response text_end
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define form_text_display text_read
	set timeout infinite
	set spacing 1
	set rows "1;4;1"
	set only_render no
	set ok_text "閱讀完畢，點此進行適讀性評估"
	set margins "5;5;5;5"
	set form_title "請閱讀這份文章"
	set form_text "[Content]"
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence text_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run text_read always
	run text_display never
	run text_end never
	run id_recording always
	run Comprehensibility_survey always
	run Scientificness_survey always
	run Credibility_survey always
	run Veracity_survey always
	run Decision_survey always
	run Access_survey always
	run Access_show "[response]=\"想\""
	run Questions never
	run EES never
	run ACC never
	run block "([count_text_seq]%3)=2"

define form_text_display welcome
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "科學文獻閱讀模式測試"
	set form_text "說明..."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


